PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = PAT_PRACTICE_icons
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    TextComponent wel
      color = -1.0000, -1.0000, -1.0000
      font = Consolas
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Welcome to the Friends Game!

        We will now show you how to play this game.

        Press spacebar for a demo.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ChoiceRoutine
    RoutineSettingsComponent ChoiceRoutine
      stopVal [duration (s)] = 3.0
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    TextComponent Who
      color = -1.0000, -1.0000, -1.0000
      contrast = 4
      font = Courier New
      letterHeight = 0.04
      pos = (0, 0.38)
      startVal [time (s)] = 0.0
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      text:
        Who do you want to be friends with?
    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent Player1demo
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Player2demo
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cooking
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/cooking.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent movies
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent dancing
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/dancing.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent fashion
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/fashion.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = fashion
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    ImageComponent movie
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent writing
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/writing.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = writing
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Player_1
    PolygonComponent polygon_6
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (-0.4,0.13)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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
    ImageComponent Player1
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cook
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/cooking.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent movie_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent dance
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/dancing.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    TextComponent p1
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    ImageComponent yes1
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (-0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topyesp1
    PolygonComponent polygon_5
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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
    ImageComponent Player1_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cook_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/cooking.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        cooking
    ImageComponent movie_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.11)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent dance_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/dancing.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_13
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.11)
      startVal [time (s)] = 0.0
      text = movies
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    TextComponent p1_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent you
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent yess
      image = C:/Users/tuu20869/Desktop/stimuli/feedback/Thumbs_up.png
      pos = (0.0,-0.073)
      size = (0.2, 0.3)
      startVal [time (s)] = 2.5
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Player_2
    PolygonComponent polygon_7
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.4,0.13)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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
    ImageComponent player
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent fashion_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/fashion.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_10
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = fashion
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    ImageComponent movie_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_11
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    ImageComponent writing_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/writing.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_12
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = writing
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    ImageComponent yes1_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_14
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topyesp2
    PolygonComponent polygon_4
      contrast = 5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 0.0039, -1.0000
      lineWidth = 5
      pos = (0.0,-0.073)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 2.5
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
    ImageComponent Player2_4
      image = C:/Users/tuu20869/Desktop/stimuli/practice/player2.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent fashion_3
      image = C:/Users/tuu20869/Desktop/stimuli/icons/fashion.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        fashion
    ImageComponent movie_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/movies.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.11)
      startVal [time (s)] = 0.0
      text = dancing
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    ImageComponent writ
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_31
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.11)
      startVal [time (s)] = 0.0
      text = writing
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    TextComponent p1_4
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    TextComponent you_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    ImageComponent participantpic_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent yes
      image = C:/Users/tuu20869/Desktop/stimuli/feedback/Thumbs_up.png
      pos = (0.0,-0.073)
      size = (0.2, 0.3)
      startVal [time (s)] = 2.5
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait
    RoutineSettingsComponent wait
      stopVal [duration (s)] = 3
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    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent text_16
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = +
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  Routine trial2
    RoutineSettingsComponent trial2
      stopVal [duration (s)] = 3.0
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    TextComponent Who_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 4
      font = Courier New
      letterHeight = 0.04
      pos = (0, 0.38)
      startVal [time (s)] = 0.0
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      text:
        Who do you want to be friends with?
    TextComponent text_15
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent text_17
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent Player1demo_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Player2demo_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_18
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent instruments
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_20
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = instruments
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    ImageComponent knitting
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_19
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = knitting
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    ImageComponent beachpic
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_22
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent cycling
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_23
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = cycling
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    KeyboardComponent friendChoice
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_24
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = beach
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  Routine Play1_2
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    TextComponent p1_3
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    ImageComponent Player1_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_28
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent instruments_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_29
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = instruments
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    ImageComponent knitting_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent yes1_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (-0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_38
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = knitting
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_7
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topnop1
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    ImageComponent Player1_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent writt
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent piano
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.11)
      startVal [time (s)] = 0.0
      text = knitting
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    ImageComponent knittingg
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_32
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.11)
      startVal [time (s)] = 0.0
      text = instruments
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    TextComponent p1_5
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent you_3
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic_6
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent no_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_down.png
      pos = (0.0,-0.073)
      size = (0.2, 0.3)
      startVal [time (s)] = 2.5
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_8
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine play2_2
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    TextComponent text_27
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent player_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent beachpic_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_25
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = beach
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    ImageComponent writingpic2_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_26
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent cycling_2
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_30
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = cycling
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    ImageComponent yes1_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_9
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topnop2
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    ImageComponent Player1_6
      image = C:/Users/tuu20869/Desktop/stimuli/practice/player2.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent beach1
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        beach
    ImageComponent write
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_10
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.11)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent cycle
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_33
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.11)
      startVal [time (s)] = 0.0
      text = cycling
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    TextComponent p1_6
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    TextComponent you_4
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic_2
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent no_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_down.png
      pos = (0.0,-0.073)
      size = (0.2, 0.3)
      startVal [time (s)] = 2.5
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice.keys != 'y':
            continueRoutine = False
  Routine wait_2
    RoutineSettingsComponent wait_2
      stopVal [duration (s)] = 3
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    PolygonComponent polygon_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent text_36
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = +
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  Routine trial3
    RoutineSettingsComponent trial3
      stopVal [duration (s)] = 3.0
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    TextComponent Who_3
      color = -1.0000, -1.0000, -1.0000
      contrast = 4
      font = Courier New
      letterHeight = 0.04
      pos = (0, 0.38)
      startVal [time (s)] = 0.0
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      text:
        Who do you want to be friends with?
    TextComponent text_21
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent text_39
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent Player1demo_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Player2demo_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic_3
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_40
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent instruments_3
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_41
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = instruments
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    ImageComponent knitting_3
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_42
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = knitting
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    ImageComponent beachpic_3
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic2_3
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_43
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent cycling_3
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_44
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = cycling
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    KeyboardComponent friendChoice_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_45
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = beach
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  Routine player1_3
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    TextComponent p1_9
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    ImageComponent Player1_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent writingpic_4
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_46
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.5, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent instruments_4
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_47
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.40, -0.07)
      startVal [time (s)] = 0.0
      text = instruments
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    ImageComponent knitting_4
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    ImageComponent yes1_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (-0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_49
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0.0
      text = knitting
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice_2.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_11
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topnsp1
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    ImageComponent Player1_7
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent draw
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent wright
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent pianoo
      image = C:/Users/tuu20869/Desktop/stimuli/icons/instruments.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_12
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.11)
      startVal [time (s)] = 0.0
      text = instruments
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    ImageComponent knit
      image = C:/Users/tuu20869/Desktop/stimuli/icons/knitting.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_34
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.11)
      startVal [time (s)] = 0.0
      text = movies
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    TextComponent p1_7
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent you_5
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach_5
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic_3
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent notseen
      image = C:/Users/tuu20869/Desktop/stimuli/feedback/grey_box.png
      pos = (0.0,-0.073)
      size = (0.2, 0.3)
      startVal [time (s)] = 2.5
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice_2.keys != 'n':
            continueRoutine = False
    KeyboardComponent key_resp_12
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine player2_3
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    TextComponent text_50
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
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      text:
        Player-2
    ImageComponent player_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player2.jpg
      pos = (0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent beachpic_4
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (0.3, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_51
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = beach
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    ImageComponent writingpic2_4
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.4, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_52
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.4, -0.08)
      startVal [time (s)] = 0.0
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      text:
        writing
    ImageComponent cycling_4
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_53
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = cycling
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    ImageComponent yes1_6
      image = C:/Users/tur31606/Desktop/pat/stimuli/feedback/Thumbs_up.png
      pos = (0.4,0.13)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice_2.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_10
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine topnsp2
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    ImageComponent Player1_8
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,0.3)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent beachh
      image = C:/Users/tuu20869/Desktop/stimuli/icons/beach.png
      pos = (-0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_13
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, 0.095)
      startVal [time (s)] = 0.0
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      text:
        beach
    ImageComponent wrightt
      image = C:/Users/tuu20869/Desktop/stimuli/icons/writing.png
      pos = (0.0, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent var_14
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, 0.11)
      startVal [time (s)] = 0.0
      text = writing
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    ImageComponent cyc
      image = C:/Users/tuu20869/Desktop/stimuli/icons/cycling.png
      pos = (0.13, 0.14)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_35
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.0, 0.11)
      startVal [time (s)] = 0.0
      text = cycling
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    TextComponent p1_8
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.45)
      startVal [time (s)] = 0.0
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      text:
        Player-1
    TextComponent you_6
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.0,0.07)
      startVal [time (s)] = 1.0
      text = You
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    ImageComponent chatting_6
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/chatting.png
      pos = (-0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent chat_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (-0.13, -0.23)
      startVal [time (s)] = 1.0
      text = chatting
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    ImageComponent sports_6
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/sports.png
      pos = (0, -0.2) 
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent sport_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0, -0.23) 
      startVal [time (s)] = 1.0
      text = sports
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    ImageComponent beach_6
      image = C:/Users/tur31606/Desktop/pat/stimuli/icons/beach.png
      pos = (0.13, -0.2)
      size = (0.04, 0.04)
      startVal [time (s)] = 1.0
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    TextComponent beach_txt_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.01
      pos = (0.13, -0.23)
      startVal [time (s)] = 1.0
      text = beach
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    ImageComponent participantpic_4
      image = C:/Users/tur31606/Desktop/pat/stimuli/practice/player1.jpg
      pos = (0.0,-0.073)
      size = (0.15, 0.20)
      startVal [time (s)] = 1.0
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    ImageComponent notseen2
      image = C:/Users/tuu20869/Desktop/stimuli/feedback/grey_box.png
      pos = (0.0,-0.073)
      size = (0.2, 0.3)
      startVal [time (s)] = 2.5
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        if friendChoice_2.keys != 'y':
            continueRoutine = False
    KeyboardComponent key_resp_13
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine ChoiceRoutine
  Routine Player_1
  Routine topyesp1
  Routine Player_2
  Routine topyesp2
  Routine wait
  Routine trial2
  Routine Play1_2
  Routine topnop1
  Routine play2_2
  Routine topnop2
  Routine wait_2
  Routine trial3
  Routine player1_3
  Routine topnsp1
  Routine player2_3
  Routine topnsp2
