PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1920, 1080]
  expName = PAT_v2
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent welcome
      color = -1.0000, -1.0000, -1.0000
      font = Consolas
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Welcome to the Friends Game!

        We will now show you how to play this game.

        Press spacebar for a demo.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ChoiceRoutine_1
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    TextComponent Who
      color = -1.0000, -1.0000, -1.0000
      contrast = 10
      font = Courier New
      letterHeight = 0.04
      pos = (0 ,0.38)
      startVal [time (s)] = 0.0
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      text:
        Who do you want to be friends with?
    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (-0.4,0.3)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $name_A
    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      font = Consolas
      letterHeight = 0.03
      pos = (0.4,0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $name_B
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    ImageComponent Player1demo
      image [set every repeat] = $pic_A
      pos = (-0.4,0.13)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent cooking
      image [set every repeat] = $int_A1_img
      pos = (-0.5, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      contrast = 8
      letterHeight = 0.015
      pos = (-0.5, -0.07)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $int_A1
    ImageComponent movies
      image [set every repeat] = $int_A2_img
      pos = (-0.40, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_6
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      letterHeight = 0.015
      pos = (-0.4, -0.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $int_A2
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    ImageComponent dancing_2
      image [set every repeat] = $int_A3_img
      pos = (-0.30, -0.03)
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = -1.0000, -1.0000, -1.0000
      contrast = 2
      letterHeight = 0.015
      pos = (-0.3, -0.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $int_A3
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    TextComponent text_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.30, -0.07)
      startVal [time (s)] = 0.0
      text = fashion
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    TextComponent text_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.4, -0.07)
      startVal [time (s)] = 0.0
      text = movies
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    TextComponent text_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.015
      pos = (0.5, -0.07)
      startVal [time (s)] = 0.0
      text = writing
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait
    RoutineSettingsComponent wait
      stopVal [duration (s)] = 3
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    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    TextComponent text_16
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = +
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = pat_conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'trail_num': 1, 'name_A': 'Amanda', 'pic_A': 'children/F01.png', 'int_A1': 'animals', 'int_A1_img': 'icons/animals.png', 'int_A2': 'chess', 'int_A2_img': 'icons/chess.png', 'int_A3': 'music', 'int_A3_img': 'icons/music.png', 'name_B': None, 'pic_B': 'Susan', 'int_B1': 'children/F32.png', 'int_B1_img': 'camping', 'int_B2': 'icons/camping.png', 'int_B2_img': 'beach', 'int_B3': 'icons/beach.png', 'int_B3_img': 'travel'},
      {'trail_num': 2, 'name_A': 'Bailey', 'pic_A': 'children/F02.png', 'int_A1': 'art', 'int_A1_img': 'icons/art.png', 'int_A2': 'chatting', 'int_A2_img': 'icons/chatting.png', 'int_A3': 'photography', 'int_A3_img': 'icons/photography.png', 'name_B': None, 'pic_B': 'Rebecca', 'int_B1': 'children/F33.png', 'int_B1_img': 'chatting', 'int_B2': 'icons/chatting.png', 'int_B2_img': 'art', 'int_B3': 'icons/art.png', 'int_B3_img': 'writing'},
      {'trail_num': 3, 'name_A': 'Natalie', 'pic_A': 'children/F03.png', 'int_A1': 'beach', 'int_A1_img': 'icons/beach.png', 'int_A2': 'camping', 'int_A2_img': 'icons/camping.png', 'int_A3': 'reading', 'int_A3_img': 'icons/reading.png', 'name_B': None, 'pic_B': 'Jillian', 'int_B1': 'children/F34.png', 'int_B1_img': 'chess', 'int_B2': 'icons/chess.png', 'int_B2_img': 'animals', 'int_B3': 'icons/animals.png', 'int_B3_img': 'yoga'},
      {'trail_num': 4, 'name_A': 'Haley', 'pic_A': 'children/F04.png', 'int_A1': 'camping', 'int_A1_img': 'icons/camping.png', 'int_A2': 'beach', 'int_A2_img': 'icons/beach.png', 'int_A3': 'music', 'int_A3_img': 'icons/music.png', 'name_B': None, 'pic_B': 'Julia', 'int_B1': 'children/F35.png', 'int_B1_img': 'computers', 'int_B2': 'icons/computers.png', 'int_B2_img': 'animals', 'int_B3': 'icons/animals.png', 'int_B3_img': 'animals'}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
    Routine ChoiceRoutine_1
  LoopTerminator trials
  Routine wait
